---
API: 3
OpenSesame: 4.0.29
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title Plugin_Installer
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/bob/Desktop/opensesame_plugin_installer"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad done
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Done!" x=-32 y=-32 z_index=0

define inline_script execute
	set description "Executes Python code"
	___run__
	import subprocess
	import sys
	
	keylist = response_options.split(';')
	my_keyboard = keyboard()
	key, time = my_keyboard.get_key(keylist=keylist)
	keys = ['1', '2', '3']
	
	
	def run(cmd):
	
		proc = subprocess.run(cmd, capture_output=True, text=True)
	
		return proc.returncode, proc.stdout, proc.stderr
	
	
	if key in keys:
		if key == '1':
			feedback = 1
			operation = "install"
			arg = arg1
		elif key == '2':
			feedback = 1
			operation = "install"
			arg = arg2
		elif key == '3':
			feedback = 1
			operation = "uninstall"
			arg = "-y"
	
		if platform.system() == 'Windows':
			if package == "pyaudio":
				print("Downloading PyAudio")
				package = pyaudio_filename
	
		cmd = [
			sys.executable,
			"-m",
			"pip",
			operation,
			] + arg.split() + package.split()	
	
		cmd_string = " ".join(cmd)
		print(cmd_string)
	
		code, out, err = run(cmd)
	
		feedback_exit = code
		feedback_error = err
		feedback_out = out
	
		print(out)
		print(code)
		print(err)
		package_list = package.split()
		package_string = package
	else:
		cmd_string = ""
		feedback_exit = ""
		feedback_error = ""
		feedback_out = "Nothing to do"
		feedback = 0
		package_string = ""
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run os_selection always
	run welcome always
	run installer_loop always
	run done always

define feedback feedback_screen
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if=True text="Installed package(s):<br /><br />{package_string}<br /><br /><br />cmd:<br /><br />{cmd_string}<br /><br /><br />Exit: {feedback_exit}<br /><br /><br />Error:<br /><br />{feedback_error}<br /><br />Output:<br /><br />{feedback_out}<br />" x=-416 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=True text="Press a key to continue" x=0 y=320 z_index=0

define loop installer_loop
	set source_file "{file_package_list}"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 opt1 "1: install / upgrade"
	setcycle 0 opt2 "2: install / no upgrade"
	setcycle 0 opt3 "3: uninstall"
	setcycle 0 opt4 "4: skip"
	setcycle 0 package "https://github.com/marcus-nystrom/Titta/releases/download/2.0.0rc10/titta-2.0.0rc10-py3-none-any.whl"
	setcycle 0 package_name "OpenSesame Eye Tracking - Titta"
	setcycle 0 response_options "1;2;3;4"
	setcycle 0 arg1 "--upgrade --user --break-system-packages"
	setcycle 0 arg2 "--user --break-system-packages"
	setcycle 1 opt1 "1: install / upgrade"
	setcycle 1 opt2 "2: install / no upgrade"
	setcycle 1 opt3 "3: uninstall"
	setcycle 1 opt4 "4: skip"
	setcycle 1 package tittapy
	setcycle 1 package_name "OpenSesame Eye Tracking - TittaPy"
	setcycle 1 response_options "1;2;3;4"
	setcycle 1 arg1 "--upgrade --user --break-system-packages"
	setcycle 1 arg2 "--user --break-system-packages"
	setcycle 2 opt1 "1: install / upgrade"
	setcycle 2 opt2 "2: install / no upgrade"
	setcycle 2 opt3 "3: uninstall"
	setcycle 2 opt4 "4: skip"
	setcycle 2 package "sr-research-pylink"
	setcycle 2 package_name "OpenSesame Eye Tracking - PyLink (SR Research)"
	setcycle 2 response_options "1;2;3;4"
	setcycle 2 arg1 "--upgrade --user --break-system-packages --index-url=https://pypi.sr-support.com "
	setcycle 2 arg2 "--user --break-system-packages  --index-url=https://pypi.sr-support.com "
	setcycle 3 opt1 "1: install / upgrade"
	setcycle 3 opt2 "2: install / no upgrade"
	setcycle 3 opt3 "3: uninstall"
	setcycle 3 opt4 "4: skip"
	setcycle 3 package "opensesame-plugin-audio_low_latency"
	setcycle 3 package_name "OpenSesame Plugin - Low Latency Audio"
	setcycle 3 response_options "1;2;3;4"
	setcycle 3 arg1 "--upgrade --user --break-system-packages"
	setcycle 3 arg2 "--user --break-system-packages"
	setcycle 4 opt1 "1: install / upgrade"
	setcycle 4 opt2 "2: install / no upgrade"
	setcycle 4 opt3 "3: uninstall"
	setcycle 4 opt4 "4: skip"
	setcycle 4 package "opensesame-plugin-radboudbox"
	setcycle 4 package_name "OpenSesame Plugin - Radboudbox"
	setcycle 4 response_options "1;2;3;4"
	setcycle 4 arg1 "--upgrade --user --break-system-packages"
	setcycle 4 arg2 "--user --break-system-packages"
	setcycle 5 opt1 "1: install / upgrade"
	setcycle 5 opt2 "2: install / no upgrade"
	setcycle 5 opt3 "3: uninstall"
	setcycle 5 opt4 "4: skip"
	setcycle 5 package "opensesame-plugin-titta_eyetracking"
	setcycle 5 package_name "OpenSesame Plugin - Titta Eye Tracking"
	setcycle 5 response_options "1;2;3;4"
	setcycle 5 arg1 "--upgrade --user --break-system-packages"
	setcycle 5 arg2 "--user --break-system-packages"
	setcycle 6 opt1 "1: install / upgrade"
	setcycle 6 opt2 "2: install / no upgrade"
	setcycle 6 opt3 "3: uninstall"
	setcycle 6 opt4 "4: skip"
	setcycle 6 package "opensesame-plugin-parallel_port_trigger"
	setcycle 6 package_name "OpenSesame Plugin - Parallel Port Trigger"
	setcycle 6 response_options "1;2;3;4"
	setcycle 6 arg1 "--upgrade --user --break-system-packages"
	setcycle 6 arg2 "--user --break-system-packages"
	setcycle 7 opt1 "1: install / upgrade"
	setcycle 7 opt2 "2: install / no upgrade"
	setcycle 7 opt3 "3: uninstall"
	setcycle 7 opt4 "4: skip"
	setcycle 7 package "opensesame-plugin-experiment_manager"
	setcycle 7 package_name "OpenSesame Plugin - Experiment Manager"
	setcycle 7 response_options "1;2;3;4"
	setcycle 7 arg1 "--upgrade --user --break-system-packages"
	setcycle 7 arg2 "--user --break-system-packages"
	setcycle 8 opt1 "1: install / upgrade"
	setcycle 8 opt2 "2: install / no upgrade"
	setcycle 8 opt3 "3: uninstall"
	setcycle 8 opt4 "4: skip"
	setcycle 8 package rusocsci
	setcycle 8 package_name "OpenSesame IO - RuSocSci"
	setcycle 8 response_options "1;2;3;4"
	setcycle 8 arg1 "--upgrade --user --break-system-packages"
	setcycle 8 arg2 "--user --break-system-packages"
	setcycle 9 opt1 "1: install / upgrade"
	setcycle 9 opt2 "2: install / no upgrade"
	setcycle 9 opt3 "3: uninstall"
	setcycle 9 opt4 "4: skip"
	setcycle 9 package sounddevice
	setcycle 9 package_name "OpenSesame Audio - SoundDevice"
	setcycle 9 response_options "1;2;3;4"
	setcycle 9 arg1 "--upgrade --user --break-system-packages"
	setcycle 9 arg2 "--user --break-system-packages"
	run installer_sequence

define sequence installer_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run variables True
	run question always
	run execute always
	run feedback_screen "feedback == 1"

define inline_script os_selection
	set description "Executes Python code"
	set _run ""
	___prepare__
	import platform
	import sys
	
	if platform.system() == 'Windows':
	    file_package_list = "windows-packages.csv"
	    os_select = "Windows"
	    if sys.version_info.minor == 7:
	        var.pyaudio_filename = \
	        "https://dev-jam.github.io/opensesame_plugin_installer/PyAudio-0.2.11-cp37-cp37m-win_amd64.whl"
	    elif sys.version_info.minor == 8:
	        var.pyaudio_filename = \
	        "https://dev-jam.github.io/opensesame_plugin_installer/PyAudio-0.2.11-cp38-cp38-win_amd64.whl"
	    elif sys.version_info.minor == 9:
	        var.pyaudio_filename = \
	        "https://dev-jam.github.io/opensesame_plugin_installer/PyAudio-0.2.11-cp39-cp39-win_amd64.whl"
	    elif sys.version_info.minor == 10:
	        var.pyaudio_filename = \
	        "https://dev-jam.github.io/opensesame_plugin_installer/PyAudio-0.2.11-cp310-cp310-win_amd64.whl"
	    elif sys.version_info.minor == 11:
	        var.pyaudio_filename = \
	        "https://dev-jam.github.io/opensesame_plugin_installer/PyAudio-0.2.11-cp311-cp311-win_amd64.whl"
	    else:
	        var.pyaudio_filename = "pyaudio"
	    
	    print("Using following link for PyAudio:")
	    print(pyaudio_filename)
	else:
	    file_package_list = "linux-packages.csv"
	    os_select = "Linux"
	__end__

define sketchpad question
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="{package_name}<br /><br /><br />{opt1}<br /><br />{opt2}<br /><br />{opt3}<br /><br />{opt4}" x=-416 y=-288 z_index=0

define inline_script variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	feedback_exit = ""
	feedback_error = ""
	feedback_out = ""
	package_string = ""
	cmd_string = ""
	feedback = 0
	__end__

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the OpenSesame plugin and library installer<br /><br /><br />Using package list for: {os_select}<br />" x=-416 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press a key to continue" x=0 y=320 z_index=0

